<CompuCell3D Revision="20150808" Version="3.7.4">
   <Potts>
      <Dimensions x="150" y="150" z="1"/>
      <Steps>1010</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>798908</RandomSeed>
   </Potts>
   <Plugin Name="PlayerSettings">
      <VisualControl ScreenshotFrequency="1000"/>
   </Plugin>
   <Plugin Name="CellType">
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType Freeze="" TypeId="9" TypeName="Wall"/>
      <CellType TypeId="1" TypeName="1"/>
   </Plugin>
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="1" LambdaVolume="100" TargetVolume="98"/>
   </Plugin>
   <Plugin Name="CenterOfMass"/>
   <Plugin Name="Contact">
      <Energy Type1="Medium" Type2="Medium">0.0</Energy>
      <Energy Type1="Wall" Type2="Wall">0.0</Energy>
      <Energy Type1="Wall" Type2="Medium">0.0</Energy>
      <Energy Type1="Medium" Type2="1">21</Energy>
      <Energy Type1="Wall" Type2="1">50.0</Energy>
      <Energy Type1="1" Type2="1">-2</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   <Plugin Name="Chemotaxis">
      <ChemicalField Name="FDS" Source="DiffusionSolverFE">
         <ChemotaxisByType Lambda="65" Type="1"/>
      </ChemicalField>
   </Plugin>
   <Steppable Type="DiffusionSolverFE">
      <DiffusionField Name="FDS">
         <DiffusionData>
            <FieldName>FDS</FieldName>
            <GlobalDiffusionConstant>0.564250388896</GlobalDiffusionConstant>
            <GlobalDecayConstant>0.716115557578</GlobalDecayConstant>
            <DiffusionCoefficient CellType="Wall">0</DiffusionCoefficient>
            <DoNotDiffuseTo CellType="Wall">Wall</DoNotDiffuseTo>
         </DiffusionData>
         <SecretionData>
            <Secretion Type="1">87.9749255031</Secretion>
         </SecretionData>
      </DiffusionField>
   </Steppable>
   <Steppable Type="RandomFieldInitializer">
      <offset x="10" y="10" z="0"/>
      <growthsteps>10</growthsteps>
      <order>2</order>
      <types>1</types>
      <ncells>188</ncells>
   </Steppable>
</CompuCell3D>
